PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 700]
  expName = tutorial_6
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $"GBP " + str(reward_today) + " today " + "or " + "GBP " + str(future_reward) + " after " + str(delay) + " days." 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 139, 'future_reward': 156, 'delay': 78},
      {'reward_today': 114, 'future_reward': 130, 'delay': 168},
      {'reward_today': 125, 'future_reward': 140, 'delay': 15},
      {'reward_today': 195, 'future_reward': 210, 'delay': 57},
      {'reward_today': 60, 'future_reward': 70, 'delay': 35},
      {'reward_today': 180, 'future_reward': 189, 'delay': 76},
      {'reward_today': 66, 'future_reward': 84, 'delay': 107},
      {'reward_today': 137, 'future_reward': 140, 'delay': 27},
      {'reward_today': 71, 'future_reward': 75, 'delay': 18},
      {'reward_today': 107, 'future_reward': 135, 'delay': 151},
      {'reward_today': 193, 'future_reward': 230, 'delay': 21},
      {'reward_today': 139, 'future_reward': 150, 'delay': 95},
      {'reward_today': 66, 'future_reward': 69, 'delay': 104},
      {'reward_today': 115, 'future_reward': 143, 'delay': 35},
      {'reward_today': 80, 'future_reward': 96, 'delay': 141},
      {'reward_today': 163, 'future_reward': 185, 'delay': 18},
      {'reward_today': 193, 'future_reward': 200, 'delay': 116}]
    Routine trial
  LoopTerminator trials
